CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "photons")
    Name to assign these images:NADHPhotons
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:NADHPhotons
    Name the output image:NADHRescaled
    Rescaling method:Divide by the image's maximum
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
IdentifyObjectsManually:[module_num:6|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
    Select the input image:NADHRescaled
    Name the objects to be identified:Nuclei

OverlayObjects:[module_num:7|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
    Input:NADHRescaled
    Name the output image:OverlayObjects
    Objects:Nuclei
    Opacity:0.3

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:NADHRescaled
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
OverlayObjects:[module_num:9|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
    Input:NADHRescaled
    Name the output image:OverlayObjects
    Objects:Cells
    Opacity:0.3

IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

OverlayObjects:[module_num:11|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
    Input:NADHRescaled
    Name the output image:OverlayObjects
    Objects:Cytoplasm
    Opacity:0.3

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:Nuclei
    Name the output image:NucImage
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:Cells
    Name the output image:CellImage
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:14|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
    Select the input objects:Cytoplasm
    Name the output image:CytoImage
    Select the color format:Grayscale
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cells
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\cmorrow5\\Desktop\\092920 quies exit fixed timecourse N2\\Masks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:CytoImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cyto
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\cmorrow5\\Desktop\\092920 quies exit fixed timecourse N2\\Masks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:NucImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuc
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\cmorrow5\\Desktop\\092920 quies exit fixed timecourse N2\\Masks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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